%YAML 1.1
---
# yaml-language-server: $schema=https://harp-tech.org/draft-02/schema/device.json
device: Cuttlefish-Cam-Trigger
whoAmI: 1408
firmwareVersion: "0.1"
hardwareTargets: "0.0"
registers:
  PWMEnabledMask:
    address: 32
    type: U8
    access: Write
    maskType: Ports
    description: "Bitmask to enable/disable each of the 8 PWM outputs"
  PWMSetMask:
    address: 33
    type: U8
    access: Write
    maskType: Ports
    description: "Bitmask to enable any of the 8 PWM outputs when corresponding bit is set to 1."
  PWMClearMask:
    address: 34
    type: U8
    access: Write
    maskType: Ports
    description: "Bitmask to disable any of the 8 PWM outputs when corresponding bit is set to 1."
  PWMInvertedMask:
    address: 35
    type: U8
    access: Write
    maskType: Ports
    description: "Bitmask to invert each of the 8 PWM outputs if set to 1"
  RisingEdgeEventMask:
    address: 36
    type: U8
    access: Write
    description: "Bitmask to enable/disable dispatch of a rising edge event message for each of the corresponding PWM outputs"
  RisingEdgeEvent:
    address: 37
    type: U8
    access: Event
    description: "Bitmask with the current state of the PWM outputs. This event is dispatched if any of the specified outputs sees a rising edge."
  PWM0FrequencyHz:
    address: 38
    type: Float
    access: Write
    description: "PWM output 0 frequency setting in Hz."
  PWM0DutyCycle:
    address: 39
    type: Float
    access: Write
    description: "PWM output 0 duty cycle setting (range: 0.0 - 1.0)."
  PWM1FrequencyHz:
    address: 40
    type: Float
    access: Write
    description: "PWM output 1 frequency setting in Hz."
  PWM1DutyCycle:
    address: 41
    type: Float
    access: Write
    description: "PWM output 1 duty cycle setting (range: 0.0 - 1.0)."
  PWM2FrequencyHz:
    address: 42
    type: Float
    access: Write
    description: "PWM output 2 frequency setting in Hz."
  PWM2DutyCycle:
    address: 43
    type: Float
    access: Write
    description: "PWM output 2 duty cycle setting (range: 0.0 - 1.0)."
  PWM3FrequencyHz:
    address: 44
    type: Float
    access: Write
    description: "PWM output 3 frequency setting in Hz."
  PWM3DutyCycle:
    address: 45
    type: Float
    access: Write
    description: "PWM output 3 duty cycle setting (range: 0.0 - 1.0)."
  PWM4FrequencyHz:
    address: 46
    type: Float
    access: Write
    description: "PWM output 4 frequency setting in Hz."
  PWM4DutyCycle:
    address: 47
    type: Float
    access: Write
    description: "PWM output 4 duty cycle setting (range: 0.0 - 1.0)."
  PWM5FrequencyHz:
    address: 48
    type: Float
    access: Write
    description: "PWM output 5 frequency setting in Hz."
  PWM5DutyCycle:
    address: 49
    type: Float
    access: Write
    description: "PWM output 5 duty cycle setting (range: 0.0 - 1.0)."
  PWM6FrequencyHz:
    address: 50
    type: Float
    access: Write
    description: "PWM output 6 frequency setting in Hz."
  PWM6DutyCycle:
    address: 51
    type: Float
    access: Write
    description: "PWM output 6 duty cycle setting (range: 0.0 - 1.0)."
  PWM7FrequencyHz:
    address: 52
    type: Float
    access: Write
    description: "PWM output 7 frequency setting in Hz."
  PWM7DutyCycle:
    address: 53
    type: Float
    access: Write
    description: "PWM output 7 duty cycle setting (range: 0.0 - 1.0)."
bitMasks:
  Ports:
    description: "Available ports on the device"
    bits:
      None: 0x0
      Port0: 0x1
      Port1: 0x2
      Port2: 0x4
      Port3: 0x8
      Port4: 0x10
      Port5: 0x20
      Port6: 0x40
      Port7: 0x80
